<CompuCell3D Revision="0" Version="4.4.0">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="300" y="300" z="1"/> <!-- 3000um = 300px -->
      <Steps>100000</Steps> <!-- 1min = 10 mcs -->
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <Boundary_y>Periodic</Boundary_y>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Necrotic"/>
      <CellType TypeId="2" TypeName="GFP"/>
      <CellType TypeId="3" TypeName="DsRed"/>
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="Surface"/>
   
   <!-- <Plugin Name="ExternalPotential"> -->
      
      <!-- External force applied to cell. Each cell has different force and force components have to be managed in Python. -->
      <!-- e.g. cell.lambdaVecX=0.5; cell.lambdaVecY=0.1 ; cell.lambdaVecZ=0.3; -->
      <!-- <Algorithm>PixelBased</Algorithm> -->
   <!-- </Plugin> -->
   
   <Plugin Name="CenterOfMass">
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <!-- <Plugin Name="NeighborTracker"> -->
      <!-- Module tracking neighboring cells of each cell -->
   <!-- </Plugin> -->
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Necrotic">10.0</Energy>
      <Energy Type1="Medium" Type2="GFP">10.0</Energy>
      <Energy Type1="Medium" Type2="DsRed">10.0</Energy>
      <Energy Type1="Necrotic" Type2="Necrotic">10.0</Energy>
      <Energy Type1="Necrotic" Type2="GFP">10.0</Energy>
      <Energy Type1="Necrotic" Type2="DsRed">10.0</Energy>
      <Energy Type1="GFP" Type2="GFP">10.0</Energy>
      <Energy Type1="GFP" Type2="DsRed">10.0</Energy>
      <Energy Type1="DsRed" Type2="DsRed">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Chemotaxis">    
      <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
      <!-- Specification of chemotaxis properties of select cell types. -->
      <ChemicalField Name="oxygen">
         <ChemotaxisByType ChemotactTowards="0.1719" Lambda="0.002938" Type="DsRed"/>
         <ChemotaxisByType ChemotactTowards="0.1791" Lambda="0.004755" Type="GFP"/>
      </ChemicalField>
   </Plugin>
   
   <Plugin Name="Secretion">
      <!-- Specification of secretion properties of select cell types. -->
      <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
      <!-- Specification of secretion properties of individual cells can be done in Python -->
      <Field Name="oxygen">
         <Secretion Type="Necrotic">-1.0</Secretion>
         <Secretion Type="DsRed">-1.0</Secretion>
         <Secretion Type="GFP">-1.0</Secretion>
      </Field>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="oxygen">
         <DiffusionData>
            <FieldName>oxygen</FieldName>
            <GlobalDiffusionConstant>1000</GlobalDiffusionConstant> <!-- 100000microm per moin  = 1000px/mcs -->
            <GlobalDecayConstant>0.01</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <DiffusionCoefficient CellType="Necrotic">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="GFP">0.1</DiffusionCoefficient>
            <DiffusionCoefficient CellType="DsRed">0.1</DiffusionCoefficient>
            <DecayCoefficient CellType="Necrotic">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="GFP">0.0001</DecayCoefficient>
            <DecayCoefficient CellType="DsRed">0.0001</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="Necrotic">0.1</Secretion> -->
            <!-- <Secretion Type="GFP">0.1</Secretion> -->
            <!-- <Secretion Type="DsRed">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="Necrotic,GFP,DsRed" Type="DsRed">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="DsRed">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               <!-- Other options are (examples): -->
               <!-- <Periodic/> -->
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="BlobInitializer">
      <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
      <Region>
         <Center x="150" y="150" z="0"/>
         <Radius>25</Radius>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types>DsRed</Types>
      </Region>
   </Steppable>
</CompuCell3D>
